// no Ca_cytonetic model here to Koep it clean. Also no concentrations: just mol
// try Cm of 200 pF for whole cell (1e-5 F is TOO LARGE)
// CONVENTION: flow from JSR (q1) to cytosol (q2).
// somehow, release (current != 0) only when Cai spiKos.
// Try : Gpore depend on dCai/dt
// 8 May: add gated channels
//          change units to fmol
// 24 May
// with stimulus current component (doesn't affect K right now)
// 29 May with Pan's NCX / NaCa exchanger
// 5 June with K/kappa constants - from first iteration (e.g. Na/Kr channels: hardcoded zf and zr)
// 11 June  with original LRD dimensions and Cm (following viswanathan - NUMBERS ARE NOT UPDATED YET)
// 6 July Add imports one at a time
// also try adding ca_dyn channel separately, outside of ca_dyn_env
// 9 July : using fkc = 1e3 (from 'all_parameters_visw_dims_density_1_Acap_slow_ncxNaK.mat')
def model main_BG_8 as
  def import using "units_BG_f.cellml" for
    unit mM using unit mM;
    unit J_per_mol using unit J_per_mol;
    unit C_per_mol using unit C_per_mol;
    unit J_per_C using unit J_per_C;
    unit J_per_K_per_mol using unit J_per_K_per_mol;
    unit kC_per_mol using unit kC_per_mol;
    unit microF using unit microF;
    unit fmol using unit fmol;
    unit fF using unit fF;
    unit fC using unit fC;
    unit fA using unit fA;
    unit per_fmol using unit per_fmol;
    unit fmol_per_millisec using unit fmol_per_millisec;
    unit fmol_per_s using unit fmol_per_sec;
    unit volt_per_sec using unit volt_per_sec;
    unit volt_per_fsec using unit volt_per_fsec;
    unit millivolt_per_millisec using unit millivolt_per_millisec;
    unit microvolt_per_sec using unit microvolt_per_sec;
    unit volt_per_millisec using unit volt_per_millisec;
    unit pL using unit pL;
    unit millisec using unit millisec;
    unit per_millisec using unit per_millisec;
    unit per_second using unit per_second;
    unit millivolt using unit millivolt;
    unit per_millivolt_millisec using unit per_millivolt_millisec;
    unit microA_per_cm2 using unit microA_per_cm2;
    unit microA_per_microF using unit microA_per_microF;
    unit A_per_cm2 using unit A_per_cm2;
    unit millimolar_per_second using unit millimolar_per_second;
    unit microA using unit microA;
    unit cm2 using unit cm2;
    unit microm3 using unit microm3;
    unit per_milli using unit per_milli;
    unit umol_per_sec using unit umol_per_sec;
    unit nmol_per_millisec using unit nmol_per_millisec;
    unit mol_per_second using unit mol_per_second;
    unit milliS_per_cm2 using unit milliS_per_cm2;
    unit S_per_cm2 using unit S_per_cm2;
    unit mA_per_mM using unit mA_per_mM;
  enddef;
  def unit m2f as
    unit second {pref: femto};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit one2m as
    unit second {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit pL_to_um3 as
    unit second {pref: micro};
    unit second {expo: -1, pref: pico};
  enddef;
  def import using "Na_background/na_background_8.cellml" for
    comp BG_nab using comp BG_Nab;
  enddef;
  def import using "NCX_pan/NaCa_slowfkc_2.cellml" for
    comp BG_NaCa using comp BG_NaCa;
  enddef;
  def import using "pCa_sarcolemmal/BG_pCa_7.cellml" for
    comp BG_pCa using comp BG_pCa;
  enddef;
  def import using "Ca_background/Ca_background_BG_4.cellml" for
    comp BG_Cab using comp BG_Cab;
  enddef;
  def import using "Pan_NaK/NaK_component_2_slowfkc.cellml" for
    comp BG_NaK using comp BG_NaK;
  enddef;
  def import using "plateau_K/Kp_BG_3.cellml" for
    comp BG_Kp using comp BG_Kp;
  enddef;
  def import using "K_ATP/K_ATP_BG_3.cellml" for
    comp BG_KATP using comp BG_KATP;
  enddef;
  def import using "ca_dynamics_JRW/ca_subsystem_JRW_2.cellml" for
    comp ca_dyn_env using comp ca_dyn_env;
  enddef;
  // def import using "ca_dynamics_JRW/ca_leak_2.cellml" for
  //     comp BG_leak using comp BG_leak;
  // enddef;
  // def import using "ca_tr_1.cellml" for
  //     comp BG_tr using comp BG_tr;
  // enddef;
  def import using "fast_na_2001/fast_na_BG_8.cellml" for
    comp BG_fastNa using comp BG_fastNa;
  enddef;
  def import using "L_Ca_channel/LCC_4.cellml" for
    comp BG_LCC using comp BG_LCC;
  enddef;
  def import using "t_type_ca_channel/TCC_2.cellml" for
    comp BG_TCC using comp BG_TCC;
  enddef;
  def import using "transient_outward/to_1.cellml" for
    comp BG_to using comp BG_to;
  enddef;
  def import using "nonspecific_Ca/ns_Ca_5.cellml" for
    comp BG_ns using comp BG_ns;
  enddef;
  def import using "Ks_channel/ks_1.cellml" for
    comp BG_Ks using comp BG_Ks;
  enddef;
  def import using "rapid_kr_2001/kr_2.cellml" for
    comp BG_Kr using comp BG_Kr;
  enddef;
  def import using "K1_time_independent/K1_BG_2.cellml" for
    comp BG_K1 using comp BG_K1;
  enddef;
  def import using "stimulus/stim_2.cellml" for
    comp BG_stim using comp BG_stim;
  enddef;

  def comp environment as
    // environmental parameters
    var time: second {pub: out};
    var RT: J_per_mol {init: 2494.34, pub: out};
    var vol_o: microm3 {pub: out};
    var R: J_per_K_per_mol {init: 8.3140, pub: out};
    var T: kelvin {init: 310, pub: out};
    var F: C_per_mol {init: 96485, pub: out};
    var RTF: volt {init: 0.0235, pub: out};
    var zNa: dimensionless {init: 1, pub: out};
    var zK: dimensionless {init: 1, pub: out};
    var zCa: dimensionless {init: 2, pub: out};
    var C_m: fF {init: 153400, pub: out};
    var q_membrane: fC {init: -12272, pub: out};
    var I_mem: fA;
    var Vmem: volt {pub: out};
    var nK_stim: C_per_mol {pub: out};
    var v_stim: fmol_per_s;
    var W_i: pL {init: 25.8, pub: out};
    var W_o: pL {init: 3.52, pub: out};
    var W_NSR: pL {init: 2.0898, pub: out};
    var W_JSR: pL {init: 0.119712, pub: out};
    var W_SS: pL {init: 0.00153, pub: out};
    // ionic parameters
    var c_Ko: mM {pub: out};
    var c_Ki: mM {pub: out};
    var c_Nao: mM {pub: out};
    var c_Nai: mM {pub: out};
    var qNao: fmol {init: 684.024, pub: out};
    var qNai: fmol {init: 342, pub: out};
    var qKo: fmol {init: 23.319, pub: out};
    var qKi: fmol {init: 5365.6, pub: out};
    var qCao: fmol {init: 9.3276, pub: out};
    var qCai: fmol {init: 1.55E-03, pub: out};
    var qCa_JSR: fmol {init: 0.14088, pub: out};
    var qCa_NSR: fmol {init: 2.6035, pub: out};
    var qCa_SS: fmol {init: 2.049E-07, pub: out};
    var qH: fmol {init: 0.0015128, pub: out};
    var qMgADP: fmol {init: 0.038, pub: out};
    var qMgATP: fmol {init: 380, pub: out};
    var qP_i: fmol {init: 0.038, pub: out};
    var nK_Kr: dimensionless {init: 0.59, pub: out};
    // potential of species
    var K_Cao: per_fmol {init: 9.35E-02, pub: out};
    var K_Cai: per_fmol {init: 6.48E-02, pub: out};
    var K_Ko: per_fmol {init: 2.04E-03, pub: out};
    var K_Ki: per_fmol {init: 2.78E-04, pub: out};
    var K_Nao: per_fmol {init: 4.31E-03, pub: out};
    var K_Nai: per_fmol {init: 0.000646789, pub: out};
    var K_CaSS: per_fmol {init: 2.42E+04, pub: out};
    var K_CaNSR: per_fmol {init: 8.22E+01, pub: out};
    var K_CaJSR: per_fmol {init: 660.5024444, pub: out};
    //
    var kappa_xfer: fmol_per_s {init: 1.41E+02, pub: out};
    var kappa_tr: fmol_per_s {init: 4.84E-02, pub: out};
    var kappa_leak: fmol_per_s {init: 8.98E-03, pub: out};
    var kappa_rel: fmol_per_s {init: 6.66E+00, pub: out};
    var kappa_up: fmol_per_s {init: 7.16E-03, pub: out};
    var kappa_kATP: fmol_per_s {init: 5.79E-06, pub: out};
    var kappa_to: fmol_per_s {init: 54.60125805, pub: out};
    var kappa_fastNa: fmol_per_s {init: 475.5890839, pub: out};
    var kappa_Nab: fmol_per_s {init: 0.100875345, pub: out};
    var kappa_Cab: fmol_per_s {init: 5.49E-02, pub: out};
    var kappa_nsK: fmol_per_s {init: 2.38E-04, pub: out};
    var kappa_nsNa: fmol_per_s {init: 1.07E-04, pub: out};
    var kappa_nsCa: fmol_per_s {init: 4.39E-05, pub: out};
    var kappa_pCa: fmol_per_s {init: 3.72E+01, pub: out};
    var kappa_LCC_Ca1: fmol_per_s {init: 5.52E-03, pub: out};
    var kappa_LCC_Ca2: fmol_per_s {init: 1.03E-02, pub: out};
    var kappa_LCC_K1: fmol_per_s {init: 3.70E-04, pub: out};
    var kappa_LCC_K2: fmol_per_s {init: 6.91E-04, pub: out};
    var kappa_LCC_Na1: fmol_per_s {init: 5.84E-04, pub: out};
    var kappa_LCC_Na2: fmol_per_s {init: 1.09E-03, pub: out};
    var kappa_TCC: fmol_per_s {init: 9.10E-01, pub: out};
    var kappa_Kr: fmol_per_s {init: 38.14477878, pub: out};
    var kappa_Ks: fmol_per_s {init: 43.07814282, pub: out};
    var kappa_K1: fmol_per_s {init: 0.465717253, pub: out};
    var kappa_Kp: fmol_per_s {init: 0.051259271, pub: out};
    //
    var mu_Ki: J_per_mol {pub: out};
    var mu_Nai: J_per_mol {pub: out};
    var mu_Cai: J_per_mol {pub: out};
    var mu_Ko: J_per_mol {pub: out};
    var mu_Nao: J_per_mol {pub: out};
    var mu_Cao: J_per_mol {pub: out};
    var mu_CaSS: J_per_mol {pub: out};
    var mu_CaJSR: J_per_mol {pub: out};
    // fluxes
    var v_Nab: fmol_per_s {pub: in};
    var v_E_Nab: fA {pub: in};
    var v_E_Cab: fA {pub: in};
    var v_E_pCa: fA {pub: in};
    var v_E_Kp: fA {pub: in};
    var v_E_KATP: fA {pub: in};
    var v_E_NaK_Ki: fA {pub: in};
    var v_E_NaK_Nao: fA {pub: in};
    var v_E_NaK: fA {pub: in};
    var v_E_LCC: fA {pub: in};
    var v_E_fastNa: fA {pub: in};
    var v_E_TCC: fA {pub: in};
    var v_E_to: fA {pub: in};
    var v_E_ns: fA {pub: in};
    var v_E_Ks: fA {pub: in};
    var v_E_Kr: fA {pub: in};
    var v_E_K1: fA {pub: in};
    var v_E_NaCa: fA {pub: in};
    var v_Kp: fmol_per_s {pub: in};
    var v_pCa: fmol_per_s {pub: in};
    var v_leak: fmol_per_s {pub: in};
    var v_rel: fmol_per_s {pub: in};
    var v_tr: fmol_per_s {pub: in};
    var v_up: fmol_per_s {pub: in};
    var v_bf_Cai: fmol_per_s {pub: in};
    var v_bf_CaSS: fmol_per_s {pub: in};
    var v_bf_CaJSR: fmol_per_s {pub: in};
    var v_xfer: fmol_per_s {pub: in};
    var v_Cab: fmol_per_s {pub: in};
    var v_KATP: fmol_per_s {pub: in};
    var v_NaK_Ko: fmol_per_s {pub: in};
    var v_NaK_Ki: fmol_per_s {pub: in};
    var v_NaK_Nao: fmol_per_s {pub: in};
    var v_NaK_Nai: fmol_per_s {pub: in};
    var v_fastNa: fmol_per_s {pub: in};
    var v_LCC_Cai: fmol_per_s {pub: in};
    var v_LCC_Cao: fmol_per_s {pub: in};
    var v_LCC_Ki: fmol_per_s {pub: in};
    var v_LCC_Ko: fmol_per_s {pub: in};
    var v_LCC_Nai: fmol_per_s {pub: in};
    var v_LCC_Nao: fmol_per_s {pub: in};
    var v_TCC: fmol_per_s {pub: in};
    var v_to: fmol_per_s {pub: in};
    var v_ns_Ca: fmol_per_s {pub: in};
    var v_ns_Na: fmol_per_s {pub: in};
    var v_ns_K: fmol_per_s {pub: in};
    var v_Ks: fmol_per_s {pub: in};
    var v_Kr: fmol_per_s {pub: in};
    var v_K1: fmol_per_s {pub: in};
    var v_NaCa_r1: fmol_per_s {pub: in};
    var v_NaCa_r2: fmol_per_s {pub: in};
    var v_NaCa_r3: fmol_per_s {pub: in};
    var v_NaCa_r4: fmol_per_s {pub: in};
    var v_NaCa_r5: fmol_per_s {pub: in};
    var v_NaCa_r6: fmol_per_s {pub: in};
    var nNao_NCX: dimensionless {init: 3, pub: out};
    var nNai_NCX: dimensionless {init: 3, pub: out};
    var zf_NCX: dimensionless {init: -0.55679, pub: out};
    var zr_NCX: dimensionless {init: 0.44321, pub: out};
    var i_BG_Nab: microA_per_microF;
    var i_fastNa: microA_per_microF;
    var i_Kp: microA_per_microF;
    var i_pCa: microA_per_microF;
    var i_Cab: microA_per_microF;
    var i_NaK_Nao: microA_per_microF;
    var i_NaK_Ki: microA_per_microF;
    var i_rel: microA_per_microF;
    var i_leak: microA_per_microF;
    var i_up: microA_per_microF;
    var i_tr: microA_per_microF;
    var i_xfer: microA_per_microF;
    var i_bf_Cai: microA_per_microF;
    var i_bf_CaSS: microA_per_microF;
    var i_bf_CaJSR: microA_per_microF;
    var i_LCC: microA_per_microF;
    var i_TCC: microA_per_microF;
    var i_kr: microA_per_microF;
    var i_Ks: microA_per_microF;
    var i_KATP: microA_per_microF;
    var i_to: microA_per_microF;
    var i_K1: microA_per_microF;
    var i_ns_Ca: microA_per_microF;
    var I_stim: fA {pub: in};
    // MEMBRANE stimulus and total current
    nK_stim = F;
    v_stim = 1{dimensionless}/nK_stim*I_stim;
    Vmem = q_membrane/C_m;
    // calculate potentials of species
    mu_Ki = RT*ln(K_Ki*qKi);
    mu_Ko = RT*ln(K_Ko*qKo);
    mu_Nai = RT*ln(K_Nai*qNai);
    mu_Nao = RT*ln(K_Nao*qNao);
    mu_Cai = RT*ln(K_Cai*qCai);
    mu_Cao = RT*ln(K_Cao*qCao);
    mu_CaSS = RT*ln(K_CaSS*qCa_SS);
    mu_CaJSR = RT*ln(K_CaJSR*qCa_JSR);
    // concentrations
    c_Nao = qNao/W_o;
    c_Nai = qNai/W_i;
    c_Ko = qKo/W_o;
    c_Ki = qKi/W_i;
    // scale down NaK fluxes if needed. 1e-3 was tried. Keep with Pan: use 1
    var snak: dimensionless {init: 1};
    // OG
    ode(qCai, time) = 1{dimensionless}*(-v_NaCa_r2-v_pCa-v_Cab+v_leak-v_up+v_LCC_Cai-v_TCC-v_ns_Ca+v_bf_Cai+v_xfer);
    ode(qCa_JSR, time) = 1{dimensionless}*(v_tr-v_rel+v_bf_CaJSR);
    ode(qCa_SS, time) = 1{dimensionless}*(v_rel-v_xfer+v_bf_CaSS);
    ode(qCa_NSR, time) = 1{dimensionless}*(-v_tr-v_leak+v_up);
    ode(qCao, time) = 1{dimensionless}*(v_NaCa_r4+v_pCa+v_Cab+v_LCC_Cao+v_TCC+v_ns_Ca);
    ode(qNai, time) = 1{dimensionless}*(-v_Nab+nNai_NCX*v_NaCa_r1+snak*v_NaK_Nai-v_fastNa+v_LCC_Nai-v_ns_Na);
    ode(qNao, time) = 1{dimensionless}*(v_Nab-nNao_NCX*v_NaCa_r5+v_NaK_Nao+v_fastNa+v_LCC_Nao+v_ns_Na);
    ode(qKi, time) = 1{dimensionless}*(snak*v_NaK_Ki-v_Kp-v_KATP+v_LCC_Ki-v_to-v_ns_K-v_Ks-v_Kr-v_K1+v_stim);
    ode(qKo, time) = 1{dimensionless}*(snak*v_NaK_Ko+v_Kp+v_KATP+v_LCC_Ko+v_to+v_ns_K+v_Ks+v_Kr+v_K1-v_stim);
    I_mem = -v_E_fastNa-v_E_Nab-v_E_pCa-v_E_Cab+v_E_NaK-v_E_Kp-v_E_KATP-v_E_LCC-v_E_TCC-v_E_to-v_E_ns-v_E_Ks-v_E_Kr-v_E_K1+v_E_NaCa+I_stim;
    // no NCX nor rel (but selection of Ca_dyn is included
    // ode(qCai, time) = 1{dimensionless}*(-v_pCa-v_Cab+v_LCC_Cai-v_TCC-v_ns_Ca+v_leak-v_up+v_bf_Cai+v_xfer);
    // ode(qCa_SS, time) = 1{dimensionless}*(v_rel-v_xfer+v_bf_CaSS);
    // ode(qCa_JSR, time) = 1{dimensionless}*(-v_tr-v_rel+v_bf_CaJSR);
    // ode(qCa_NSR, time) = 1{dimensionless}*(v_tr-v_leak+v_up);
    // ode(qCao, time) = 1{dimensionless}*(v_pCa+v_Cab+v_LCC_Cao+v_TCC+v_ns_Ca);
    // ode(qNai, time) = 1{dimensionless}*(-v_Nab+snak*v_NaK_Nai-v_fastNa+v_LCC_Nai-v_ns_Na);
    // ode(qNao, time) = 1{dimensionless}*(v_Nab+v_NaK_Nao+v_fastNa+v_LCC_Nao+v_ns_Na);
    // ode(qKi, time) = 1{dimensionless}*(snak*v_NaK_Ki-v_Kp-v_KATP+v_LCC_Ki-v_to-v_ns_K-v_Ks-v_Kr-v_K1+v_stim);
    // ode(qKo, time) = 1{dimensionless}*(snak*v_NaK_Ko+v_Kp+v_KATP+v_LCC_Ko+v_to+v_ns_K+v_Ks+v_Kr+v_K1-v_stim);
    // I_mem = -v_E_Nab-v_E_Cab-v_E_pCa-v_E_KATP-v_E_Ks-v_E_to-v_E_fastNa-v_E_TCC-v_E_K1-v_E_ns-v_E_Kr+v_E_NaK-v_E_Kp-v_E_LCC+I_stim;
    // no NCX nor Ca_dynamics
    //        ode(qNai, time) = 1{dimensionless}*(-v_Nab-v_fastNa+v_LCC_Nai-v_ns_Na+snak*v_NaK_Nai);
    //        ode(qNao, time) = 1{dimensionless}*(v_Nab+v_fastNa+v_LCC_Nao+v_ns_Na+v_NaK_Nao);
    //        ode(qCai, time) = 1{dimensionless}*(-v_Cab-v_pCa+v_LCC_Cai-v_TCC-v_ns_Ca);
    //        ode(qCao, time) = 1{dimensionless}*(v_Cab+v_pCa+v_LCC_Cao+v_TCC+v_ns_Ca);
    //        ode(qKi, time) = 1{dimensionless}*(-v_Kp-v_KATP-v_Ks-v_to+v_LCC_Ki-v_K1-v_ns_K-v_Kr+snak*v_NaK_Ki+v_stim);
    //        ode(qKo, time) = 1{dimensionless}*(v_Kp+v_KATP+v_Ks+v_to+v_LCC_Ko+v_K1+v_ns_K+v_Kr+snak*v_NaK_Ko-v_stim);
    //  For NaK, calculate inside component. Calculate the net outward current for Vmem - multiply by F.
    //         v_E_NaK_Nao = F*v_NaK_Nao*snak;
    //         v_E_NaK_Ki = F*v_NaK_Ki*snak;
    // v_E_LCC = zCa*F*v_LCC_Cao+F*(v_LCC_Ko+v_LCC_Nao);
    ode(q_membrane, time) = 1{dimensionless}*I_mem;
    // current in amps
    i_BG_Nab = v_Nab*F/C_m;
    i_fastNa = v_fastNa*F/C_m;
    i_pCa = v_pCa*F/C_m;
    i_Cab = v_Cab*F/C_m;
    i_NaK_Nao = snak*v_NaK_Nao*F/(3{dimensionless}*C_m);
    i_NaK_Ki = snak*v_NaK_Ki*F/(2{dimensionless}*C_m);
    i_Kp = v_Kp*F/C_m;
    i_leak = v_leak*F/C_m;
    i_up = v_up*F/C_m;
    i_rel = v_rel*F/C_m;
    i_tr = v_tr*F/C_m;
    i_xfer = v_xfer*F/C_m;
    i_bf_Cai = v_bf_Cai*F/C_m;
    i_bf_CaSS = v_bf_CaSS*F/C_m;
    i_bf_CaJSR = v_bf_CaJSR*F/C_m;
    i_LCC = (v_LCC_Cao+v_LCC_Ko+v_LCC_Nao)*F/C_m;
    i_TCC = v_TCC*F/C_m;
    i_kr = v_Kr*F/C_m;
    i_Ks = v_Ks*F/C_m;
    i_KATP = v_KATP*F/C_m;
    i_to = v_to*F/C_m;
    i_K1 = v_K1*F/C_m;
    i_ns_Ca = v_ns_Ca*F/C_m;
    // convert volume
    vol_o = W_o*1e3{pL_to_um3};
  enddef;
  def map between environment and BG_fastNa for
    vars time and t;
    vars RT and RT;
    vars zNa and z;
    vars F and F;
    vars qNai and q1;
    vars qNao and q2;
    vars K_Nai and K_Nai;
    vars K_Nao and K_Nao;
    vars kappa_fastNa and kappa_Na;
    vars q_membrane and q_E;
    vars C_m and C_m;
    vars W_o and W_o;
    vars v_fastNa and v_fastNa;
    vars v_E_fastNa and v_E_fastNa;
  enddef;
  def map between environment and BG_nab for
    vars time and t;
    vars RT and RT;
    vars zNa and z;
    vars F and F;
    vars qNai and qNai;
    vars qNao and qNao;
    vars K_Nai and K_Nai;
    vars K_Nao and K_Nao;
    vars kappa_Nab and kappa_Nab;
    vars W_i and w_i;
    vars W_o and w_o;
    vars q_membrane and q_E;
    vars C_m and C_m;
    vars v_Nab and v_Nab;
    vars v_E_Nab and v_E_Nab;
  enddef;
  def map between environment and BG_NaCa for
    vars time and t;
    vars RT and RT;
    vars F and F;
    vars Vmem and Vm;
    vars mu_Nai and mu_Nai;
    vars mu_Nao and mu_Nao;
    vars mu_Cai and mu_Cai;
    vars mu_Cao and mu_Cao;
    vars zf_NCX and zf_NCX;
    vars zr_NCX and zr_NCX;
    vars nNai_NCX and nNai_NCX;
    vars nNao_NCX and nNao_NCX;
    vars qCao and q_Ca_o;
    vars qCai and q_Ca_i;
    vars qNai and q_Na_i;
    vars qNao and q_Na_o;
    vars v_NaCa_r1 and v_NaCa_r1;
    vars v_NaCa_r2 and v_NaCa_r2;
    vars v_NaCa_r3 and v_NaCa_r3;
    vars v_NaCa_r4 and v_NaCa_r4;
    vars v_NaCa_r5 and v_NaCa_r5;
    vars v_NaCa_r6 and v_NaCa_r6;
    vars v_E_NaCa and v_E_NaCa;
  enddef;
  def map between environment and BG_pCa for
    vars time and t;
    vars RT and RT;
    vars zCa and z;
    vars F and F;
    vars qCai and q1;
    vars qCao and q2;
    vars K_Cai and K_q1;
    vars K_Cao and K_q2;
    vars q_membrane and q_E;
    vars C_m and C_m;
    vars v_pCa and v_pCa;
    vars v_E_pCa and v_E_pCa;
    vars kappa_pCa and kappa;
  enddef;
  def map between environment and BG_Cab for
    vars time and t;
    vars RT and RT;
    vars zCa and z;
    vars F and F;
    vars qCai and qCai;
    vars qCao and qCao;
    vars kappa_Cab and kappa_Cab;
    vars K_Cao and K_Cao;
    vars K_Cai and K_Cai;
    vars q_membrane and q_E;
    vars C_m and C_m;
    vars v_Cab and v_Cab;
    vars v_E_Cab and v_E_Cab;
    vars W_i and w_i;
    vars W_o and w_o;
  enddef;
  def map between environment and BG_NaK for
    vars time and t;
    vars F and F;
    vars R and R;
    vars T and T;
    vars W_i and W_i;
    vars W_o and W_o;
    vars qNao and x_Nao;
    vars qNai and x_Nai;
    vars qKo and x_Ko;
    vars qKi and x_Ki;
    vars qH and x_H;
    vars qMgADP and x_MgADP;
    vars qMgATP and x_MgATP;
    vars qP_i and x_P_i;
    vars K_Ko and K_Ko;
    vars K_Ki and K_Ki;
    vars K_Nao and K_Nao;
    vars K_Nai and K_Nai;
    vars Vmem and Vmem;
    vars v_NaK_Ko and v_NaK_Ko;
    vars v_NaK_Ki and v_NaK_Ki;
    vars v_NaK_Nao and v_NaK_Nao;
    vars v_NaK_Nai and v_NaK_Nai;
    vars v_E_NaK_Ki and v_E_NaK_Ki;
    vars v_E_NaK_Nao and v_E_NaK_Nao;
    vars v_E_NaK and v_E_NaK;
  enddef;
  def map between environment and BG_Kp for
    vars time and t;
    vars RT and RT;
    vars zK and z;
    vars F and F;
    vars qKi and qKi;
    vars qKo and qKo;
    vars kappa_Kp and kappa_Kp;
    vars K_Ko and K_Ko;
    vars K_Ki and K_Ki;
    vars q_membrane and q_E;
    vars C_m and C_m;
    vars v_Kp and v_Kp;
    vars v_E_Kp and v_E_Kp;
  enddef;
  def map between environment and BG_KATP for
    vars time and t;
    vars RT and RT;
    vars zK and z;
    vars F and F;
    vars qKi and q1;
    vars qKo and q2;
    vars K_Ki and K_q1;
    vars K_Ko and K_q2;
    vars kappa_kATP and kappa_kATP;
    vars q_membrane and q_E;
    vars C_m and C_m;
    vars W_o and w_o;
    vars v_KATP and v_KATP;
    vars v_E_KATP and v_E_KATP;
  enddef;
  def map between environment and ca_dyn_env for
    vars time and time;
    vars C_m and C_m;
    vars RT and RT;
    vars zCa and z;
    vars F and F;
    vars qCai and qCa_cyto;
    vars qCa_JSR and qCa_JSR;
    vars qCa_NSR and qCa_NSR;
    vars qCa_SS and qCa_SS;
    vars K_Cai and K_Cai;
    vars K_CaSS and K_CaSS;
    vars K_CaNSR and K_CaNSR;
    vars K_CaJSR and K_CaJSR;
    vars mu_Cai and mu_Cai;
    vars mu_CaSS and mu_CaSS;
    vars mu_CaJSR and mu_CaJSR;
    vars kappa_xfer and kappa_xfer;
    vars kappa_tr and kappa_tr;
    vars kappa_leak and kappa_leak;
    vars kappa_rel and kappa_rel;
    vars kappa_up and kappa_up;
    vars v_leak and v_leak;
    vars v_rel and v_rel;
    vars v_tr and v_tr;
    vars v_up and v_up;
    vars v_bf_Cai and v_bf_Cai;
    vars v_bf_CaSS and v_bf_CaSS;
    vars v_bf_CaJSR and v_bf_CaJSR;
    vars v_xfer and v_xfer;
  enddef;
  // def map between environment and BG_tr for
  //     vars time and t;
  //     vars RT and RT;
  //     vars z and z;
  //     vars F and F;
  //     vars qCa_NSR and qCa_NSR;
  //     vars qCa_JSR and qCa_JSR;
  //     vars K_CaNSR and K_CaNSR;
  //     vars K_CaJSR and K_CaJSR;
  //     vars kappa_tr and kappa_tr;
  //     vars C_m and C_m;
  //     vars v_tr and v_tr;
  // enddef;
  // def map between environment and BG_leak for
  //     vars time and t;
  //     vars RT and RT;
  //     vars zCa and z;
  //     vars F and F;
  //     vars qCa_NSR and qCa_NSR;
  //     vars qCai and qCa_cyto;
  //     vars K_CaNSR and K_CaNSR;
  //     vars K_Cai and K_Cacyto;
  //     vars kappa_leak and kappa_leak;
  //     vars C_m and C_m;
  //     vars v_leak and v_leak;
  // enddef;
  def map between environment and BG_LCC for
    vars time and t;
    vars RT and RT;
    vars F and F;
    vars qCai and qCai;
    vars qCao and qCao;
    vars qKi and qKi;
    vars qKo and qKo;
    vars qNai and qNai;
    vars qNao and qNao;
    vars q_membrane and q_E;
    vars C_m and C_m;
    vars W_o and W_o;
    vars v_LCC_Cai and v_LCC_Cai;
    vars v_LCC_Cao and v_LCC_Cao;
    vars v_LCC_Ki and v_LCC_Ki;
    vars v_LCC_Ko and v_LCC_Ko;
    vars v_LCC_Nai and v_LCC_Nai;
    vars v_LCC_Nao and v_LCC_Nao;
    vars zCa and zCa;
    vars zNa and zNa;
    vars zK and zK;
    vars K_Cao and K_Cao;
    vars K_Cai and K_Cai;
    vars K_Ko and K_Ko;
    vars K_Ki and K_Ki;
    vars K_Nao and K_Nao;
    vars K_Nai and K_Nai;
    vars kappa_LCC_Ca1 and kappa_LCC_Ca1;
    vars kappa_LCC_Ca2 and kappa_LCC_Ca2;
    vars kappa_LCC_K1 and kappa_LCC_K1;
    vars kappa_LCC_K2 and kappa_LCC_K2;
    vars kappa_LCC_Na1 and kappa_LCC_Na1;
    vars kappa_LCC_Na2 and kappa_LCC_Na2;
    vars v_E_LCC and v_E_LCC;
  enddef;
  def map between environment and BG_TCC for
    vars time and t;
    vars RT and RT;
    vars zCa and z;
    vars F and F;
    vars qCai and qCai;
    vars qCao and qCao;
    vars kappa_TCC and kappa_Ca;
    vars K_Cao and K_Cao;
    vars K_Cai and K_Cai;
    vars q_membrane and q_E;
    vars C_m and C_m;
    vars vol_o and vol_o;
    vars v_TCC and v_TCC;
    vars v_E_TCC and v_E_TCC;
  enddef;
  def map between environment and BG_to for
    vars time and t;
    vars RT and RT;
    vars zK and z;
    vars F and F;
    vars qKi and qKi;
    vars qKo and qKo;
    vars kappa_to and kappa_to;
    vars K_Ko and K_Ko;
    vars K_Ki and K_Ki;
    vars q_membrane and q_E;
    vars C_m and C_m;
    vars W_o and W_o;
    vars v_to and v_to;
    vars v_E_to and v_E_to;
  enddef;
  def map between environment and BG_ns for
    vars time and t;
    vars RT and RT;
    vars zK and zK;
    vars zNa and zNa;
    vars zCa and zCa;
    vars F and F;
    vars qCai and qCai;
    vars qCao and qCao;
    vars qNai and qNai;
    vars qNao and qNao;
    vars qKi and qKi;
    vars qKo and qKo;
    vars K_Nai and K_Nai;
    vars K_Nao and K_Nao;
    vars K_Cai and K_Cai;
    vars K_Cao and K_Cao;
    vars K_Ki and K_Ki;
    vars K_Ko and K_Ko;
    vars kappa_nsK and kappa_nsK;
    vars kappa_nsNa and kappa_nsNa;
    vars kappa_nsCa and kappa_nsCa;
    vars W_i and w_i;
    vars W_o and w_o;
    vars q_membrane and q_E;
    vars C_m and C_m;
    vars v_ns_Ca and v_ns_Ca;
    vars v_ns_Na and v_ns_Na;
    vars v_ns_K and v_ns_K;
    vars v_E_ns and v_E_ns;
  enddef;
  def map between environment and BG_Ks for
    vars time and t;
    vars RT and RT;
    vars zK and z;
    vars F and F;
    vars qKi and qKi;
    vars qKo and qKo;
    vars kappa_Ks and kappa_K;
    vars K_Ko and K_Ko;
    vars K_Ki and K_Ki;
    vars q_membrane and q_E;
    vars C_m and C_m;
    vars W_o and Wo;
    vars v_Ks and v_Ks;
    vars v_E_Ks and v_E_Ks;
  enddef;
  def map between environment and BG_Kr for
    vars time and t;
    vars RT and RT;
    vars zK and z;
    vars F and F;
    vars qKi and q1;
    vars qKo and q2;
    vars kappa_Kr and kappa_K;
    vars K_Ko and K_Ko;
    vars K_Ki and K_Ki;
    vars q_membrane and q_E;
    vars C_m and C_m;
    vars v_Kr and v_Kr;
    vars v_E_Kr and v_E_Kr;
    vars nK_Kr and nK;
  enddef;
  def map between environment and BG_K1 for
    vars time and t;
    vars RT and RT;
    vars F and F;
    vars qKi and qKi;
    vars qKo and qKo;
    vars K_Ki and K_Ki;
    vars K_Ko and K_Ko;
    vars kappa_K1 and kappa_K1;
    vars q_membrane and q_E;
    vars C_m and C_m;
    vars v_K1 and v_K1;
    vars v_E_K1 and v_E_K1;
  enddef;
  def map between environment and BG_stim for
    vars time and time;
    vars C_m and C_m;
    vars F and F;
    vars I_stim and I_stim;
    vars nK_stim and nK_stim;
  enddef;
enddef;
